// ********** Image Types

(FixedInternalImagePixelType "float")
//(FixedImageDimension 3)
(MovingInternalImagePixelType "float")

//(MovingImageDimension 3)
(UseDirectionCosines "true")




// ********** Components

(Registration "MultiResolutionRegistration")

(FixedImagePyramid "FixedRecursiveImagePyramid")

(MovingImagePyramid "MovingRecursiveImagePyramid")

(Interpolator "BSplineInterpolator")

(Metric "AdvancedNormalizedCorrelation")

(Optimizer "AdaptiveStochasticGradientDescent")
(ASGDParameterEstimationMethod "DisplacementDistribution")

(ResampleInterpolator "FinalBSplineInterpolator")




(OpenCLResamplerUseOpenCL "true")
(Resampler "OpenCLResampler")
(Transform ""AffineTransform")





// ********** Pyramid

// Total number of resolutions
(NumberOfResolutions 2)
(FixedImagePyramidSchedule 4 4 4 1 1 1)



// ********** Transform

(HowToCombineTransforms "Compose")



// ********** Optimizer


// Maximum number of iterations in each resolution level:
(MaximumNumberOfIterations 300 600)


(AutomaticParameterEstimation "true")

(UseAdaptiveStepSizes "true")


(AutomaticScalesEstimation "true")



// ********** Metric

// Just using the default values for the NC metric



// ********** Several

(WriteTransformParametersEachIteration "false")

(WriteTransformParametersEachResolution "false")

(WriteResultImageAfterEachResolution "false")

(WritePyramidImagesAfterEachResolution "false")

(WriteResultImage "true")

(ShowExactMetricValue "false")

(ErodeMask "false")



// ********** ImageSampler


//Number of spatial samples used to compute the mutual information in each resolution level:
(ImageSampler "RandomCoordinate")

(NumberOfSpatialSamples 1000)
(NewSamplesEveryIteration "true")




// ********** Interpolator and Resampler


//Order of B-Spline interpolation used in each resolution level:
(BSplineInterpolationOrder 1)

//Order of B-Spline interpolation used for applying the final deformation:
(FinalBSplineInterpolationOrder 3)


//Default pixel value for pixels that come from outside the picture:
(DefaultPixelValue 0)


// The pixel type and format of the resulting deformed moving image
(ResultImagePixelType "float")

(ResultImageFormat "mha")